---
API: 3
OpenSesame: 4.1.9
Platform: nt
---
set width 1920
set uniform_coordinates yes
set title picture
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_suppress_warnings yes
set psycho_audiolib sounddevice
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\Display\\Documents\\GitHub\\OpenSesame4_Examples\\OpenSesame4_Examples\\OpenSesame4_Examples\\OpenSesame4_Picture"
set disable_garbage_collection False
set description "This example experiment illustrates how to program a free viewing task with OpenSesame and the EyeLink plugin."
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#bebebe"

define loop block
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 trial 1
	setcycle 0 image "BeachPier.jpg"
	setcycle 1 trial 2
	setcycle 1 image "BeachHuts.jpg"
	setcycle 2 trial 3
	setcycle 2 image "BeachBar.jpg"
	setcycle 3 trial 4
	setcycle 3 image "Bikes.jpg"
	run trial_sequence

define el_camera_setup el_camera_setup
	set el_disable_audio no
	set el_calib_type HV9
	set el_calib_repeat_first yes
	set el_calib_randomize yes
	set el_calib_force_manual no
	set el_cal_target_type Default
	set el_cal_target_file "fixation.bmp"
	set description "Adjust the camera and calibrate the tracker"

define el_connect el_connect
	set el_ip "100.1.1.1"
	set el_dummy_mode no
	set el_disable_audio no
	set el_custom_ip no
	set description "Establish a link to the EyeLink tracker"

define el_disconnect el_disconnect
	set description "Terminate the link to the EyeLink tracker."

define el_drift_check el_drift_check
	set el_drift_tar_y 0
	set el_drift_tar_x 0
	set el_dc_target_type SameAsCalibration
	set el_dc_target_file ""
	set el_allow_setup yes
	set description "Perform drift-correction/check"

define inline_script el_msg_stimulus_display
	set description "Executes Python code"
	___run__
	# We need a time offset to accurately mark the onset of the stimulus_display screen
	time_offset = int(self.clock.time() - var.time_stimulus_display)
	exp.eyelink.sendMessage('%d stimulus_display' % time_offset)
	
	# Set the Data Viewer background to light gray to match the project 1ms before the image onset
	clear_offset = time_offset + 1
	exp.eyelink.sendMessage('%d !V CLEAR 190 190 190' % clear_offset)
	
	
	# Send another message to let Data Viewer know where to load the background image during visualization; this require a special "!V IMG
	img_path = '../../images/' + var.image
	img_x = var.width/2
	img_y = var.height/2
	imgload_msg = '%d !V IMGLOAD CENTER %s %d %d'%(time_offset, img_path, img_x, img_y)
	
	exp.eyelink.sendMessage(imgload_msg)
	
	var.current_frame = 0
	__end__
	set _prepare ""

define el_send_message el_send_message_keyboard
	set el_message_to_send keyboard_resp
	set description "Send message(s) to the tracker"

define el_start_recording el_start_recording
	set el_recording_status_msg "Current image file is [image]"
	set el_link_data_samples yes
	set el_link_data_events yes
	set el_host_target_item stimulus_display
	set description "Start data recording"

define el_stop_recording el_stop_recording
	__el_log_editor__
	image
	avg_rt
	__end__
	set el_log_all_vars no
	set description "Stop data recording and log trial variables"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run task_instruction always
	run el_connect True
	run el_camera_setup True
	run block always
	run el_disconnect True

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad stimulus_display
	set duration 0
	set description "The visual world display"
	draw image center=1 file="[image]" name=tar scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad task_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="TASK INSTRUCTIONS<br /><br /><br/><br/><br />This example script shows how to program a Free Viewing task <br/>with OpenSesame and the EyeLink plugin.<br /><br />A picture will be shown on each trial; press any key to the next trial.<br /><br /><br/><br/>Press any key to start..." x=21 y=6 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run el_drift_check True
	run el_start_recording True
	run stimulus_display always
	run el_msg_stimulus_display always
	run keyboard_response always
	run el_send_message_keyboard True
	run el_stop_recording True
	run logger True

