---
API: 3
OpenSesame: 4.1.9
Platform: nt
---
set width 1920
set uniform_coordinates yes
set title "Visual World Task with Mouse Click"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set psychopy_suppress_warnings yes
set psycho_audiolib sounddevice
set mouse_backend legacy
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\Display\\Downloads\\OpenSesame4_Examples\\OpenSesame4_Examples\\OpenSesame4_VW_Click"
set disable_garbage_collection False
set description "This example experiment illustrates how to program a Visual World type task with OpenSesame and the EyeLink plugin."
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#ffffff"

define inline_script DefineAccurateResponse
	set description "Executes Python code"
	___run__
	# check if the target has been clicked
	var.acc = 0
	if var.cursor_roi == 'target': 
		var.acc = 1
	__end__
	set _prepare ""

define inline_script MSG_blank_screen
	set description "Executes Python code"
	___run__
	# We need a time offset to write a time-accurate message to mark the onset of the blank_screen
	
	time_offset = int(self.clock.time() - self.var.time_blank_screen)
	exp.eyelink.sendMessage('%d blank_screen' % time_offset)
	__end__
	set _prepare ""

define inline_script MSG_target_word
	set description "Executes Python code"
	___run__
	# wait for the onset of the target word, then show the mouse cursor
	clock.sleep(var.target_word_onset_time)
	
	# reset the mouse cursor to the center of the screen
	my_mouse = mouse()
	my_mouse.set_pos(pos=(0,0))
	__end__
	set _prepare ""

define sampler audio_stream
	set volume 1
	set stop_after 0
	set sample "[sound_file]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad blank_screen
	set duration 0
	set description "Displays stimuli"

define loop block
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_img "grapes.bmp"
	setcycle 0 target_loc 2
	setcycle 0 distractor_1_img "sun.bmp"
	setcycle 0 distractor_1_loc 3
	setcycle 0 distractor_2_img "umbrella.bmp"
	setcycle 0 distractor_2_loc 4
	setcycle 0 distractor_3_img "shoe.bmp"
	setcycle 0 distractor_3_loc 1
	setcycle 0 sound_file "click_grapes.wav"
	setcycle 0 target_word_onset_time 845
	setcycle 1 target_img "grapes.bmp"
	setcycle 1 target_loc 3
	setcycle 1 distractor_1_img "sun.bmp"
	setcycle 1 distractor_1_loc 4
	setcycle 1 distractor_2_img "umbrella.bmp"
	setcycle 1 distractor_2_loc 1
	setcycle 1 distractor_3_img "shoe.bmp"
	setcycle 1 distractor_3_loc 2
	setcycle 1 sound_file "click_grapes.wav"
	setcycle 1 target_word_onset_time 845
	setcycle 2 target_img "grapes.bmp"
	setcycle 2 target_loc 4
	setcycle 2 distractor_1_img "sun.bmp"
	setcycle 2 distractor_1_loc 1
	setcycle 2 distractor_2_img "umbrella.bmp"
	setcycle 2 distractor_2_loc 2
	setcycle 2 distractor_3_img "shoe.bmp"
	setcycle 2 distractor_3_loc 3
	setcycle 2 sound_file "click_grapes.wav"
	setcycle 2 target_word_onset_time 845
	setcycle 3 target_img "grapes.bmp"
	setcycle 3 target_loc 1
	setcycle 3 distractor_1_img "sun.bmp"
	setcycle 3 distractor_1_loc 2
	setcycle 3 distractor_2_img "umbrella.bmp"
	setcycle 3 distractor_2_loc 3
	setcycle 3 distractor_3_img "shoe.bmp"
	setcycle 3 distractor_3_loc 4
	setcycle 3 sound_file "click_grapes.wav"
	setcycle 3 target_word_onset_time 845
	run trial_sequence

define el_camera_setup el_camera_setup
	set el_disable_audio no
	set el_calib_type HV9
	set el_calib_repeat_first yes
	set el_calib_randomize yes
	set el_calib_force_manual no
	set el_cal_target_type Image
	set el_cal_target_file "fixation.bmp"
	set description "Adjust the camera and calibrate the tracker"

define el_connect el_connect
	set el_ip "100.1.1.1"
	set el_dummy_mode no
	set el_disable_audio no
	set el_custom_ip no
	set description "Establish a link to the EyeLink tracker"

define el_disconnect el_disconnect
	set description "Terminate the link to the EyeLink tracker."

define el_drift_check el_drift_check
	set el_drift_tar_y 0
	set el_drift_tar_x 0
	set el_dc_target_type SameAsCalibration
	set el_dc_target_file ""
	set el_allow_setup yes
	set description "Perform drift-correction/check"

define el_gaze_trigger el_gaze_trigger
	set el_trigger_within yes
	set el_trigger_duration 1000
	set el_gaze_trigger_size 200
	set el_gaze_trigger_location "0,0"
	set el_create_ia yes
	set el_abort_key yes
	set description "Gaze trigger plugin"

define el_send_message el_send_message_cursor_roi
	set el_message_to_send "mouse_click [cursor_roi]"
	set description "Send message(s) to the tracker"

define el_send_message el_send_message_fixdot
	__el_message_to_send__
	fixdot_display
	3 !V clear 255 255 255
	3 !V FIXPOINT 0 0 0 255 255 255 960 540 18 4
	__end__
	set description "Send message(s) to the tracker"

define el_send_message el_send_message_word_onset
	set el_message_to_send target_word_onset
	set description "Send message(s) to the tracker"

define el_start_recording el_start_recording
	set el_recording_status_msg "Current trial number is [count_el_start_recording]"
	set el_link_data_samples yes
	set el_link_data_events yes
	set el_host_target_item stimulus_display
	set description "Start data recording"

define el_stop_recording el_stop_recording
	__el_log_editor__
	target_img
	target_loc
	target_word_onset_time
	distractor_1_img
	distractor_1_loc
	distractor_2_img
	distractor_2_loc
	distractor_3_img
	distractor_3_loc
	sound_file
	acc
	avg_rt
	cursor_roi
	__end__
	set el_log_all_vars no
	set description "Stop data recording and log trial variables"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run task_instruction always
	run el_connect True
	run el_camera_setup True
	run block always
	run el_disconnect True

define sketchpad fixdot_display
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="fixation.bmp" scale=1 show_if=True x=0 y=0 z_index=0

define logger log_behavioral_response
	set description "Logs experimental data"
	set auto_log yes

define mouse_response mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad stimulus_display
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define advanced_delay preview_objects
	set jitter_mode Uniform
	set jitter 0
	set duration 1000
	set description "Waits for a specified duration"

define sketchpad stimulus_display
	set duration 0
	set description "The visual world display"
	draw image center=1 file="fixation.bmp" scale=1 show_if=always x=0 y=0 z_index=0
	draw image center=1 file="[target_img]" name=target scale=1 show_if=always x=-240 y=-240 z_index=0
	draw image center=1 file="[distractor_1_img]" name=distractor_1 scale=1 show_if=always x=240 y=-240 z_index=0
	draw image center=1 file="[distractor_2_img]" name=distractor_2 scale=1 show_if=always x=240 y=240 z_index=0
	draw image center=1 file="[distractor_3_img]" name=distractor_3 scale=1 show_if=always x=-240 y=240 z_index=0

define inline_script stimulus_randomise_send_msg
	set description "Executes Python code"
	___run__
	# We need a time offset to proper use a message to mark the onset of the stimulus_display screen
	time_offset = int(self.clock.time() - self.var.time_stimulus_display)
	
	exp.eyelink.sendMessage('%d stimulus_display' % time_offset)
	
	# Send over messages to record the interest areas, and the image paths
	# for Data Viewer visualization purposes
	pos = xy_circle(n=4, rho = 250)  # positions of the images
	img_w, img_h =[240, 240]  # image width and height
	
	img_labels = ['target', 'distractor_1', 'distractor_2', 'distractor_3']
	
	# position index for the images (target, distractor_1, distractor_2, distractor_3)
	pos_index = [var.target_loc-1, 
	             var.distractor_1_loc-1, 
	             var.distractor_2_loc-1, 
	             var.distractor_3_loc-1]
	
	# name of the image files 
	img_files = [var.target_img, 
	             var.distractor_1_img, 
	             var.distractor_2_img, 
	             var.distractor_3_img]
	
	for i in range(4):
	    im_x, im_y = pos[pos_index[i]]  # image position x, y
	
	    # interest area index (starts from 1)
	    ia_index = i + 1
	    # interest area img_label
	    ia_label = img_labels[i]
	    # image position in the typical coordinates in computer graphics
	    ia_left = int(im_x - img_w/2 + var.width/2) 
	    ia_top = int(im_y - img_h/2 + var.height/2)
	    ia_right = int(im_x + img_w/2 + var.width/2)
	    ia_bottom = int(im_y + img_h/2 + var.height/2)
	    
	    # for precise timing, include a time offset in the Interest area message 
	    msg_offset = int(self.clock.time() - self.var.time_stimulus_display)
	    # construct and send the Interest Area messages
	    ia_msg_pars = (msg_offset, ia_index, ia_left, ia_top, ia_right, ia_bottom, ia_label)
	    ia_msg = '%d !V IAREA RECTANGLE %d %d %d %d %d %s' % ia_msg_pars
	    exp.eyelink.sendMessage(ia_msg)
	    
	    # for precise timing, include a time offset in the IMGLOAD message
	    msg_offset = int(self.clock.time() - self.var.time_stimulus_display)
	
	    # construct and send the IMGload message
	    # Data Viewer will use this message to draw the images when visualizing data
	    img_path = '../../images/' + img_files[i]
	    img_x = im_x + var.width/2
	    img_y = im_y + var.height/2
	    imgload_msg = '%d !V IMGLOAD CENTER %s %d %d'%(msg_offset, img_path, img_x, img_y)
	    exp.eyelink.sendMessage(imgload_msg)
	    
	__end__
	___prepare__
	pos = xy_circle(n=4, rho = 250)  # possible image positions on a virtual circle
	
	img_w, img_h =[240, 240]  # width and height of the image
	
	# get the canvas on which the objects are shown
	sti = items['stimulus_display'].canvas
	
	# position index for the images (tar, dis_1, dis_2, dis_3)
	pos_index = [var.target_loc-1, 
	             var.distractor_1_loc-1, 
	             var.distractor_2_loc-1, 
	             var.distractor_3_loc-1]
	
	# image labels on the sketchpad
	img_labels = ['target', 'distractor_1', 'distractor_2', 'distractor_3']
	
	for i in range(4):
	    s = img_labels[i]
	    # set image position on the canvas
	    sti[s].x, sti[s].y = pos[pos_index[i]]
	__end__

define sketchpad task_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="TASK INSTRUCTIONS<br /><br /><br/><br/><br />This example script shows how to program a Visual World type task <br/>with OpenSesame and the EyeLink plugin.<br /><br />Please present your task instructions here. <br/>For demo purposes, please click the grapes when you hear 'grapes' in the sentence.<br /><br /><br/><br/>Press any key to start..." x=21 y=6 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run el_drift_check True
	run el_start_recording True
	run fixdot_display True
	run el_send_message_fixdot True
	run el_gaze_trigger True
	run stimulus_display always
	run stimulus_randomise_send_msg always
	run preview_objects always
	run audio_stream always
	run MSG_target_word always
	run el_send_message_word_onset True
	run mouse_response always
	run DefineAccurateResponse always
	run el_send_message_cursor_roi True
	run blank_screen always
	run MSG_blank_screen always
	run el_stop_recording True
	run log_behavioral_response always

